// Modified by Torbjorn Ness, 21/09/2018 to work as TemplateCell in LFPy


begintemplate model_0603_cell03

/*
*
* This is the code for the model in Figure 1c2
* It was optimised together with the corresponding morphology:
* 2013_03_06_cell03_789_H41_03.ASC
* 
* AUTHOR: Guy Eyal, the Hebrew University
* CONTACT: guy.eyal@mail.huji.ac.il
*
*/

public init, biophys, geom_nseg, delete_axon
public create_axon

public soma, dend, apic, axon
public all, somatic, apical, axonal, basal
objref all, somatic, apical, axonal, basal, this

strdef tstr

proc init() {localobj nl,import  // Added by TN: localobj nl,import
	all = new SectionList()
	somatic = new SectionList()
	basal = new SectionList()
	apical = new SectionList()
	axonal = new SectionList()
	
 	forall delete_section()
 	StepDist = 60 // Almost no spines in human cells within the first 60 um
 				  // from soma - see Benavides-Piccione 2013
	F_Spines = 1.9       //As calculated - see detailes in Eyal 2016
	//Results of the fitting algorithm
	CM =0.488   	// uF/cm2
	RM = 21406		// Ohm-cm2	
	RA = 281.78	// Ohm-cm
	// Junction Potential of 16 mV. Not important anyway for the passive model 
	// But important when adding voltage dependant process - synapses and VG ion channels
	E_PAS =  -86

    // The rest if this function was added by TN
    nl = new Import3d_Neurolucida3()
    nl.quiet = 1
    nl.input($s1)
    import = new Import3d_GUI(nl, 0)
    import.instantiate(this)
	geom_nseg()
	delete_axon()
	biophys()

}

create soma[1], dend[1], apic[1], axon[1]

external lambda_f
proc geom_nseg() {

  forsec all {
  printf("sdfsdf")
  nseg = 1 + 2*int(L/40)
  }

}


proc biophys() {
	
	
	forsec all {	
	   insert pas		
		cm =CM
	    g_pas=1/RM
		Ra = RA
		e_pas = E_PAS
	}
	
	soma distance()
	
	forsec basal {	
	  for (x){
			if (distance(x)>StepDist) {
				cm(x)=CM*F_Spines
				g_pas(x)=(1/RM)*F_Spines
			}
		}	
	}
	forsec apical {
	
	  for (x){
			if (distance(x)>StepDist) {
				cm(x)=CM*F_Spines
				g_pas(x)=(1/RM)*F_Spines
				
			}
		}	
	}
	
}


proc delete_axon(){
    forsec axonal{delete_section()}

}

endtemplate model_0603_cell03

